OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.1.0)

Generic stream reader - MI => #0
  Filename = C:/Program Files/openvibe-3.1.0-64bit/share/openvibe/scenarios/signals/bci-motor-imagery.ov
#0.Output stream 2 -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 16.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 10
-> 3D Topography - 10-20
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Gain = 1
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
#1 -> Channel Selector "C3;FC3;CP3;C5;C1;C4;FC4;CP4;C2;C6"
  Channel List = C3;FC3;CP3;C5;C1;C4;FC4;CP4;C2;C6
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Filter Coefficients = 4;-1;-1;-1;-1;4;-1;-1;-1;-1
  Number of Output Channels = 1
  Number of Input Channels = 10
  Filter matrix file =
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Epoch average => #9
  Averaging type = Moving epoch average
  Epoch count = 10
Input signal=#9 -> LSL Export
  Signal stream = openvibeSignalLea
  Marker stream = openvibeMarkerLea
Input stream=#9 -> 0x341d3912 CSV File Writer
  Filename = ${__volatile_ScenarioDir}/signals/testLea-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false
Data=#1 -> Signal display "Filtered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
