OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.1.0)

Generic stream reader - EEGO => #0
  Filename = C:/Users/leapi/OneDrive/Bureau/Sport Unlimitech 2021/ScenariiOpenViBE/signals/EEGOsports64_Baseline2minYO_-[2021.09.08-14.52.37].ov
#0.Output stream 2 -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 16.000000
  Pass band ripple (dB) = 0.500000
-> Simple DSP => #2
  Equation = x*pow(10,3)
-> 3D Topography - Equidistant
  Channel Localisation = ${__volatile_ScenarioDir}/cy-261.txt
  Gain = 1
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
#2 -> Channel Selector "2RA;5R;4R;1RA;3RB;4RB;3RA;2LA;5L;4L;1LA;3LB;4LB;3LA" => #4
  Channel List = 2RA;5R;4R;1RA;3RB;4RB;3RA;2LA;5L;4L;1LA;3LB;4LB;3LA
  Action = Select
  Channel Matching Method = Smart
-> 3D Topography - Equidistant
  Channel Localisation = ${__volatile_ScenarioDir}/cy-261.txt
  Gain = 1
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
#4 -> Spatial Filter
  Spatial Filter Coefficients = 6;-1;-1;-1;-1;-1;-1;6;1;-1;-1;-1;-1;-1
  Number of Output Channels = 1
  Number of Input Channels = 14
  Filter matrix file =
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Epoch average => #9
  Averaging type = Moving epoch average
  Epoch count = 10
Input signal=#9 -> LSL Export
  Signal stream = openvibeSignalLea
  Marker stream = openvibeMarkerLea
Input stream=#9 -> 0x341d3912 CSV File Writer
  Filename = ${__volatile_ScenarioDir}/signals/testLea-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false
#4 -> Channel Rename
  New channel names = C3;C4
-> 3D Topography - 10-20
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Gain = 1
  Caption = Test
  Color = ${AdvancedViz_DefaultColorGradient}
Data=#1 -> Signal display "Filtered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
