OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.1.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal Filter => #1
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 16
  Band Pass Ripple (dB) = 0.5
Data=#1 -> Signal display "Filtered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#1 -> Channel Selector "2RA;5R;4R;1RA;3RB;4RB;3RA;2LA;5L;4L;1LA;3LB;4LB;3LA;2Z;4Z;6Z;8Z"
  Channel List = 2RA;5R;4R;1RA;3RB;4RB;3RA;2LA;5L;4L;1LA;3LB;4LB;3LA;2Z;4Z;6Z;8Z
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP
  Equation = x*pow(10,3)
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 10
-> 0x341d3912 3D Topography - Equidistant
  Channel Localisation = ${__volatile_ScenarioDir}/cy-261.txt
  Gain = 1
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
#1 -> Channel Selector "2RA;5R;4R;1RA;3RB;4RB;3RA;2LA;5L;4L;1LA;3LB;4LB;3LA"
  Channel List = 2RA;5R;4R;1RA;3RB;4RB;3RA;2LA;5L;4L;1LA;3LB;4LB;3LA
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP
  Equation = x*pow(10,3)
-> Spatial Filter
  Spatial Filter Coefficients = 6;-1;-1;-1;-1;-1;-1;6;1;-1;-1;-1;-1;-1
  Number of Output Channels = 1
  Number of Input Channels = 14
  Filter matrix file =
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Epoch average => #13
  Averaging type = Moving epoch average
  Epoch count = 10
Input signal=#13 -> LSL Export
  Signal stream = openvibeSignalLea
  Marker stream = openvibeMarkerLea

0x341d3912 Generic stream reader - EEGO
  Filename = C:/Users/lpillett/Desktop/DémosNFsport/ScenariiOpenViBE/signals/.ov signals/EEGOsports64_MouvementsMainDroite5s_-[2021.09.08-14.56.40].ov
