OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.1.0)
Settings
  Session = 6

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1027
#0.Signal stream -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 16.000000
  Pass band ripple (dB) = 0.500000
-> Channel Selector "2RA;5R;4R;1RA;3RB;4RB;3RA;2LA;5L;4L;1LA;3LB;4LB;3LA"
  Channel List = 2RA;5R;4R;1RA;3RB;4RB;3RA;2LA;5L;4L;1LA;3LB;4LB;3LA
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP
  Equation = x*pow(10,3)
-> Spatial Filter
  Spatial Filter Coefficients = 6;-1;-1;-1;-1;-1;-1;6;1;-1;-1;-1;-1;-1
  Number of Output Channels = 1
  Number of Input Channels = 14
  Filter matrix file =
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Epoch average => #7
  Averaging type = Moving epoch average
  Epoch count = 10
Baseline - Rest with eyes Opened => #8
  Lua Script = ${__volatile_ScenarioDir}/scenario-baseline-rest.lua
  baseline duration = 30
-> Sound Player
  PLAY trigger = OVTK_StimulationId_Beep
  STOP trigger = OVTK_StimulationId_BaselineStop
  File to play = C:/Users/leapi/OneDrive/Bureau/Sport Unlimitech 2021/ScenariiOpenViBE/ov_beep.wav
  Loop = false
#8 -> Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_StimulationId_BaselineStop
  Cue Image 1 = ${__volatile_ScenarioDir}/cross.png
  Stimulation 1 = OVTK_StimulationId_BaselineStart
#8 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Input stream=#7, Stimulations stream=#8 -> CSV File Writer
  Filename = ${__volatile_ScenarioDir}/signals/baseline-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false

0x341d3912 Generic stream reader - EEGO
  Filename = ${__volatile_ScenarioDir}/signals/EEGOsports64_Baseline2minYO_-[2021.09.08-14.52.37].ov
