OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.1.0)
0x790d75b8 = Yann Renard
0x9f5c4075 = Signal Monitoring
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  The Temporal Filter
  box transform the signal
  so you can see what is actually
  used online.
Comment
  Overview

  This scenario can be used in order
  to check the quality of the signals
  before starting an experiment.

  One should definitely
  check the quality of the signals
  and ensure that :

  - eye blinks are visible
  - jaw clenching are visible
  - alpha waves are visible when closing eyes

0x341d3912 Generic stream reader - EEGO
  Filename = C:/Users/leapi/OneDrive/Bureau/Sport Unlimitech 2021/ScenariiOpenViBE/signals/EEGOsports64_Baseline2minYO_-[2021.09.08-14.52.37].ov

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#1.Signal stream -> Temporal Filter => #2
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
-> Channel Selector "2RA;5R;4R;1RA;3RB;4RB;3RA;2LA;5L;4L;1LA;3LB;4LB;3LA;2Z;4Z;6Z;8Z"
  Channel List = 2RA;5R;4R;1RA;3RB;4RB;3RA;2LA;5L;4L;1LA;3LB;4LB;3LA;2Z;4Z;6Z;8Z
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP
  Equation = x*pow(10,3)
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 10
-> 3D Topography - Equidistant
  Channel Localisation = C:/Users/lpillett/Desktop/DemosNFsport/ScenariiOpenViBE/cy-261.txt
  Gain = 1
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
Data=#2 -> Signal display "Filtered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#1.Signal stream -> Signal display "Non Filtered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
